#include <Avance.incl>
#include <Grad.incl>

;;Declarations:start
define delay gon
"gon = 2u"
define delay goff
"goff = 2u"
define delay gwait
"gwait = 0.2m"
define delay grad1
"grad1 = 2m"
define delay grad2
"grad2 = 3m"
define pulse Hh90
"Hh90 = 0.01m"
define pulse Ch90
"Ch90 = 0.01m"
define pulse Hh180
"Hh180 = 0.02m"
define pulse Ch180
"Ch180 = 0.02m"
define pulse H190
"H190 = 0.128m"
define pulse H1180
"H1180 = 0.128m"
define pulse C190
"C190 = 0.128m"
define pulse C1180
"C1180 = 0.128m"

;;Declarations:stop

;;basic set-up:


1 ze




 2 30m
  d1
  1u reset:f1
  1u reset:f2
  1u reset:f3
  1m

  50u UNBLKGRAD


;;Pulses:start

; Initial virtual 180s: (0,0,0,0)

; ZZs:	
; State:RH:I;H1:I;RC:I;C1:I

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.000000, 0.000000, 0.000000, 0.000000

; Final channel phases (in reference frame): 
; 0.000000, 0.000000, 0.000000, 0.000000

 ;Final State: 
; I, I, I, I



 ;----------------------------------
; Total Time: 0.000000 seconds.
 ;----------------------------------


; Initial virtual 180s: (0,0,0,0)
; State:RH:Z;H1:Z;RC:Z;C1:Z
; ZZs:	


; noop


; State:RH:Z;H1:Z;RC:Z;C1:Z
; ZZs:	H1&C1=0.003;		C1&H1=0.003;		


0.013m
0.01m pl21:f2
( Hh90 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	RH&H1=0.000:0.000--; 	H1&RH=0.000:0.000--; 	H1&RC=0.000:0.000--; 	H1&C1=0.000:0.000+-; 	RC&H1=0.000:0.000--; 	C1&H1=0.000:0.000+-; 	


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph4 ):f2 
6u
0.01m pl2:f2
3u ipp4


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	



gon:ngrad
grad1
goff:ngrad
gwait


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	RH&H1=0.000:0.000--; 	H1&RH=0.000:0.000--; 	H1&RC=0.000:0.000--; 	H1&C1=0.000:0.000+-; 	RC&H1=0.000:0.000--; 	C1&H1=0.000:0.000+-; 	


0.013m
0.01m pl21:f2
( Hh90 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	RH&H1=0.000:0.000--; 	H1&RH=0.000:0.000--; 	H1&RC=0.000:0.000--; 	H1&C1=0.000:0.000+-; 	RC&H1=0.000:0.000--; 	C1&H1=0.000:0.000+-; 	


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3


2.27657m

; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	RH&H1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.250:0.250++; 	RC&H1=0.000:0.000-+; 	C1&H1=0.250:0.250++; 	


0.013m
0.01m pl21:f2
( Hh90 ph4 ):f2 
6u
0.01m pl2:f2
3u ipp4


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	RH&H1=0.000:0.000--; 	H1&RH=0.000:0.000--; 	H1&RC=0.000:0.000--; 	H1&C1=0.000:0.000+-; 	RC&H1=0.000:0.000--; 	C1&H1=0.000:0.000+-; 	


0.013m
0.01m pl21:f2
( Hh90 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:Z;H1:X;RC:Z;C1:Z
; ZZs:	



gon:ngrad
grad2
goff:ngrad
gwait



; ZZs:	RH&RC=0.162;		H1&C1=0.002;		RC&RH=0.162;		C1&H1=0.002;		
; State:RH:Z;H1:X;RC:Z;C1:Z

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.991102, 0.666670, 0.117599, 0.000000

; Final channel phases (in reference frame): 
; 0.000000, 0.000000, 0.000000, 0.000000

 ;Final State: 
; Z, X, Z, Z



 ;----------------------------------
; Total Time: 0.008245 seconds.
 ;----------------------------------


; Initial virtual 180s: (0,0,0,0)
; State:RH:;H1:;RC:;C1:
; ZZs:	RH&H1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.003:0.000++; 	RC&H1=0.000:0.000-+; 	C1&H1=0.003:0.000++; 	
; Net ZZ error: 0.002872, cos=0.999837


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3



; ZZs:	RH&H1=0.000:0.000-+; 	RH&RC=0.003:0.000++; 	RH&C1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.002:0.000++; 	RC&RH=0.003:0.000++; 	RC&H1=0.000:0.000-+; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.002:0.000++; 	C1&RC=0.000:0.000-+; 	
; State:RH:;H1:X;RC:;C1:
; Net ZZ error: 0.003509, cos=0.999757

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.222791, 0.000000, 0.928058, 0.000000

; Final channel phases (in reference frame): 
; 0.000000, 0.000000, 0.000000, 0.000000

 ;Final State: 
; , X, , 



 ;----------------------------------
; Total ZZ error: 0.004535, cos=0.999594
; Total Time: 0.008297 seconds.
 ;----------------------------------


;;Pulses:stop
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;







;;New set-up
  50u BLKGRAD
  ;;go=2 ph31:r ;; commented by JZ Dec08, 10
  go=2 ph30 ph31:r ;; by JZ Dec08, 10
  100m
  wr #0
  exit

;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
   ph30 = (65536) 0

;;Phases:start
;;;;;;;;;;;;;;

ph31 = (65536) 0
ph1 = (65536) 49152 27306 51882 
ph2 = (65536) 0 10922 43690 
ph3 = (65536) 27306 35498 16384 
ph4 = (65536) 43690 51882 

;;Phases:stop
;;;;;;;;;;;;;
