#include <Avance.incl>
#include <Grad.incl>

;;Declarations:start
define delay gon
"gon = 2u"
define delay goff
"goff = 2u"
define delay gwait
"gwait = 0.2m"
define delay grad1
"grad1 = 2m"
define delay grad2
"grad2 = 3m"
define pulse Hh90
"Hh90 = 0.01m"
define pulse Ch90
"Ch90 = 0.02m"
define pulse Hh180
"Hh180 = 0.02m"
define pulse Ch180
"Ch180 = 0.04m"
define pulse H190
"H190 = 0.128m"
define pulse H1180
"H1180 = 0.128m"
define pulse C190
"C190 = 0.128m"
define pulse C1180
"C1180 = 0.128m"

;;Declarations:stop

;;basic set-up:


1 ze




 2 30m
  d1
  1u reset:f1
  1u reset:f2
  1u reset:f3
  1m

  50u UNBLKGRAD


;;Pulses:start

; Initial virtual 180s: (0,0,0,0)

; ZZs:	
; State:RH:I;H1:I;RC:I;C1:I

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.000000, 0.000000, 0.000000, 0.000000

; Final channel phases (in reference frame): 
; 0.500000, 0.000000, 0.000000, 0.000000

 ;Final State: 
; I, I, I, I



 ;----------------------------------
; Total Time: 0.000000 seconds.
 ;----------------------------------


; Initial virtual 180s: (0,0,0,0)
; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	H1&C1=0.003;		C1&H1=0.003;		


0.013m
0.01m pl21:f2
( Hh90 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph4 ):f2 
6u
0.01m pl2:f2
3u ipp4


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	



gon:ngrad
grad1
goff:ngrad
gwait


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh90 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3


2.27418m

; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	H1&C1=0.250:0.250++; 	C1&H1=0.250:0.250++; 	


0.013m
0.01m pl21:f2
( Hh90 ph4 ):f2 
6u
0.01m pl2:f2
3u ipp4


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh180 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	


0.013m
0.01m pl21:f2
( Hh90 ph2 ):f2 
6u
0.01m pl2:f2
3u ipp2


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	



gon:ngrad
grad2
goff:ngrad
gwait


; State:RH:I;H1:I;RC:I;C1:I
; ZZs:	H1&C1=0.005;		C1&H1=0.005;		


0.013m
0.01m pl22:f3
( Ch180 ph10 ):f3 
6u
0.01m pl3:f3
3u ipp10



; ZZs:	RH&RC=0.164;		H1&C1=0.002;		RC&RH=0.164;		C1&H1=0.002;		
; State:RH:I;H1:I;RC:I;C1:I

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.488590, 0.666670, 0.637420, 0.000000

; Final channel phases (in reference frame): 
; 0.208924, 0.000000, 0.000000, 0.000000

 ;Final State: 
; I, I, I, I



 ;----------------------------------
; Total Time: 0.008324 seconds.
 ;----------------------------------


; Initial virtual 180s: (0,0,0,0)
; State:RH:;H1:;RC:;C1:
; ZZs:	RH&H1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.003:0.000++; 	RC&H1=0.000:0.000-+; 	C1&H1=0.003:0.000++; 	
; Net ZZ error: 0.002875, cos=0.999837


0.013m
0.01m pl21:f2
( Hh90 ph3 ):f2 
6u
0.01m pl2:f2
3u ipp3


1.67492m

; State:RH:;H1:X;RC:;C1:
; ZZs:	RH&H1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.186:0.250++; 	RC&H1=0.000:0.000-+; 	C1&H1=0.186:0.250++; 	
; Net ZZ error: 0.064475, cos=0.919060


0.013m
0.01m pl21:f2
( Hh90 ph4 ):f2 
6u
0.01m pl2:f2
3u ipp4


; State:RH:;H1:X;RC:;C1:
; ZZs:	RH&H1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.005:0.000++; 	RC&H1=0.000:0.000-+; 	C1&H1=0.005:0.000++; 	
; Net ZZ error: 0.005319, cos=0.999442


0.013m
0.01m pl21:f2
( Hh90 ph1 ):f2 
6u
0.01m pl2:f2
3u ipp1


; State:RH:;H1:X;RC:;C1:
; ZZs:	RH&C1=0.000:0.000-+; 	H1&C1=0.006:0.000++; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.006:0.000++; 	C1&RC=0.000:0.000-+; 	
; Net ZZ error: 0.006019, cos=0.999285


0.013m
0.01m pl22:f3
( Ch90 ph11 ):f3 
6u
0.01m pl3:f3
3u ipp11


; State:RH:;H1:X;RC:;C1:X
; ZZs:	RH&C1=0.000:0.000-+; 	H1&C1=0.007:0.000++; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.007:0.000++; 	C1&RC=0.000:0.000-+; 	
; Net ZZ error: 0.006719, cos=0.999109


0.013m
0.01m pl22:f3
( Ch90 ph12 ):f3 
6u
0.01m pl3:f3
3u ipp12


; State:RH:;H1:X;RC:;C1:X
; ZZs:	RH&C1=0.000:0.000-+; 	H1&C1=0.007:0.000++; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.007:0.000++; 	C1&RC=0.000:0.000-+; 	
; Net ZZ error: 0.006719, cos=0.999109


0.013m
0.01m pl22:f3
( Ch90 ph13 ):f3 
6u
0.01m pl3:f3
3u ipp13



; ZZs:	RH&H1=0.000:0.000-+; 	RH&RC=0.116:0.000++; 	RH&C1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.003:0.000++; 	RC&RH=0.116:0.000++; 	RC&H1=0.000:0.000-+; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.003:0.000++; 	C1&RC=0.000:0.000-+; 	
; State:RH:;H1:X;RC:;C1:X
; Net ZZ error: 0.115658, cos=0.747403

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.557423, 0.000000, 0.481553, 0.000000

; Final channel phases (in reference frame): 
; 0.680407, 0.000000, 0.000000, 0.000000

 ;Final State: 
; , X, , X



 ;----------------------------------
; Total ZZ error: 0.133030, cos=0.684700
; Total Time: 0.010341 seconds.
 ;----------------------------------


; Initial virtual 180s: (0,0,0,0)
; State:RH:;H1:;RC:;C1:
; ZZs:	RH&C1=0.000:0.000-+; 	H1&C1=0.004:0.000++; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.004:0.000++; 	C1&RC=0.000:0.000-+; 	
; Net ZZ error: 0.003575, cos=0.999748


0.013m
0.01m pl22:f3
( Ch90 ph14 ):f3 
6u
0.01m pl3:f3
3u ipp14



; ZZs:	RH&H1=0.000:0.000-+; 	RH&RC=0.003:0.000++; 	RH&C1=0.000:0.000-+; 	H1&RH=0.000:0.000-+; 	H1&RC=0.000:0.000-+; 	H1&C1=0.003:0.000++; 	RC&RH=0.003:0.000++; 	RC&H1=0.000:0.000-+; 	RC&C1=0.000:0.000-+; 	C1&RH=0.000:0.000-+; 	C1&H1=0.003:0.000++; 	C1&RC=0.000:0.000-+; 	
; State:RH:;H1:;RC:;C1:X
; Net ZZ error: 0.004029, cos=0.999680

 ;Terminal virtual 180s: 
; (0,0,0,0)

; Final phases (in reference frame): 
; 0.121132, 0.000000, 0.683550, 0.000000

; Final channel phases (in reference frame): 
; 0.879340, 0.000000, 0.000000, 0.000000

 ;Final State: 
; , , , X



 ;----------------------------------
; Total ZZ error: 0.005386, cos=0.999427
; Total Time: 0.010403 seconds.
 ;----------------------------------


;;Pulses:stop
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;







;;New set-up
  50u BLKGRAD
  ;;go=2 ph31:r ;; commented by JZ Dec08, 10
  go=2 ph30 ph31:r ;; by JZ Dec08, 10
  100m
  wr #0
  exit

;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
   ph30 = (65536) 0

;;Phases:start
;;;;;;;;;;;;;;

ph31 = (65536) 0
ph1 = (65536) 49152 27306 51882 32768 
ph2 = (65536) 0 10922 43690 
ph3 = (65536) 27306 35498 49152 
ph4 = (65536) 43690 51882 49152 
ph10 = (65536) 0 
ph11 = (65536) 32768 
ph12 = (65536) 49152 
ph13 = (65536) 0 
ph14 = (65536) 16384 

;;Phases:stop
;;;;;;;;;;;;;
